PsychoPy2experiment version="2022.1.4"
Settings
  Completed URL = https://google.com
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = study
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent primerCode
      Code Type = Auto->JS
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      End Routine:
        if randomInt == 1:
            primer = "You're nothing"
        elif randomInt == 2:
            primer = "You're great"
        elif randomInt == 3:
            primer = "People are walking"
        else:
            primer = "Error 2"

        thisExp.addData('study.primer', primer)
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        prompts = [
            "I think that what happened was funny.",
            "I definitely wouldn’t have fallen for that prank.",
            "I feel bad for the target of the prank.",
            "I wish I could have been there to see that!",
            "The target just needs to move on – why do they need to tell the world about it?!",
            "I think that the prank went WAY too far.",
        ]
        pranks = [
            "\"Today my girlfriend decided it would be hilarious if she pulled a prank on me, so she did the classic ‘bucket of water on a door’ one. I ended up getting stitches and a concussion on my birthday.\" (3 July 2012)",
            "\"Today, my friends got me a cake for my birthday. As I blew out the candles, they shoved my head into it and I was knocked out for 3 minutes before an ambulance took me to the hospital. I got a concussion from a cake.\" (8 September 2017)",
            "\"Today, my friends decided to pull a prank. They told my girlfriend I had cheated on her, which I hadn’t. Her revenge? Inviting me over to have me walk in on her with my brother. Our 6-month anniversary was two days away and I got her a trip to Spain, which cost me almost three paychecks.\" (19 December 2018)",
            "\"Today, while I was sleeping, my girlfriend took my phone and set the ringtone to a blood-curdling scream. I found this out when I received a call while driving to work and, thinking someone was being murdered in my backseat, I panicked and swerved into a parked car.\" (1 June 2011)",
            "\"Today, my sister called me at work and told me our elderly mom had passed away. I dropped everything and rushed home, to find out she was fine, and that my sister was just pranking me. When I explained this to my boss, he accused me of lying to get out of work, and I was fired.\" (6 July 2021)"
        ]

        randomInt = randint(1,4)
        primer = "error primer"
        prankIndex = 0
        promptIndex = 0
  Routine answer
    TextComponent prankText
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [frame N] = 2
      text [set every frame] = $prankVar
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    TextComponent promptText
      letterHeight = 0.03
      pos = (0, -0.11)
      saveStartStop = False
      startVal [frame N] = 2
      text [set every frame] = $promptVar
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    TextComponent hiddenobserver
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [frame N] = 2
      text = My "hidden observer" says that:
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    SliderComponent slider
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ("Strongly Disagree","","","","","","","Strongly Agree")
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8)
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    TextComponent primertext
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.15
      saveStartStop = False
      stopVal [frame N] = 20
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      text [set every repeat]:
        $primer
    TextComponent answerContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press Space to Submit and Continue
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    CodeComponent promptAnswerCode
      Code Type = Auto->JS
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      Begin Routine:
        prankVar = pranks[prankIndex]
        promptVar = prompts[promptIndex]
        thisExp.addData('prankVar.routineValue', '"' + prankVar)
        thisExp.addData('promptVar.routineValue', '"' + promptVar + '"')

        sliderAnswered = false
      Each Frame:
        slider.getRating()
        if slider.getRating() is not None:
            sliderAnswered = true
      End Routine:
        sliderAnswered = false
    KeyboardComponent answerKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine primerRoutine
    TextComponent PrimerText
      color = 0.2098, 0.2098, 0.2059
      letterHeight = 0.05
      saveStartStop = False
      stopVal [frame N] = 1
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      text [set every repeat]:
        $primer
  Routine incrementPrompt
    CodeComponent incpromt
      Code Type = Auto->JS
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      Begin Routine:
        promptIndex = promptIndex + 1
  Routine incrementPrank
    CodeComponent prankInc
      Code Type = Auto->JS
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      Begin Routine:
        prankIndex = prankIndex + 1
        promptIndex = 0
  Routine number
    TextComponent prankNumberText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"Prank " + str(prankIndex + 1)
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  Routine finish
    TextComponent completetext
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.00
      text = Study Complete
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  Routine respectroutine
    FormComponent respectform
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = aboutrespect.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent respectContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press Space to Submit and Continue
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    KeyboardComponent respectKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine angerroutine
    FormComponent angerform
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = aboutanger.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent angerContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press Space to Submit and Continue
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    KeyboardComponent angerKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine demoroutine
    FormComponent demoForm
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = demographic.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent demoContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press Space to Submit and Continue
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    KeyboardComponent demoKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine consent
    FormComponent consentform
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = consentform.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent consentContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [condition] = consentform.formComplete()
      text = Press Space to Submit and Continue
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    KeyboardComponent consentKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = consentform.formComplete()
      store = nothing
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  Routine informationletter
    FormComponent infoletter
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = informationletter.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent infoContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press Space to Submit and Continue
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    KeyboardComponent infoKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine debrief
    FormComponent debriefform
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = debriefform.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent debriefContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [condition] = debriefform.formComplete()
      text = Press Space to Submit and Continue
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    KeyboardComponent debriefKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = debriefform.formComplete()
      store = nothing
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  Routine feedback
    FormComponent feedbackform
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = feedbackletter.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent feedbackContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press Space to Submit and Continue
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    KeyboardComponent feedbackKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instructions
    FormComponent instructionsform
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = HO.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent instructContinuePrompt
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press Space to Submit and Continue
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    KeyboardComponent instructKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine setup
  Routine informationletter
  Routine consent
  Routine instructions
  LoopInitiator pranksLoop loopType="TrialHandler"
    loopType = sequential
    nReps = pranks.length
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    Routine number
    LoopInitiator promptLoop loopType="TrialHandler"
      loopType = sequential
      nReps = prompts.length
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      Routine answer
      Routine incrementPrompt
    LoopTerminator promptLoop
    Routine incrementPrank
  LoopTerminator pranksLoop
  Routine respectroutine
  Routine angerroutine
  Routine demoroutine
  Routine finish
  Routine feedback
  Routine debrief
